# 1 "C:/Bruker/TopSpin3.6.2/exp/stan/nmr/lists/pp/mlevphpp"
;mlevphpp
;avance-version (12/01/11)
;homonuclear Hartman-Hahn transfer using MLEV17 sequence
;   for mixing
;using two power levels for excitation and spinlock
;phase sensitive
;using purge pulses before d1
;
;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;$RECOMMEND=y


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"p5=p6*.667"
"p7=p6*2"
"d11=30m"
"d12=20u"


"in0=inf1"
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"d0=in0/2-p1*2/3.1416-4u"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"
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; dimension 2D; AQ_mode  (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d11 - d11"
"MCWRK = 0.200000*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
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2 MCWRK  * 2
LBLF1, MCWRK  * 2
LBLST1, MCWRK
  MCREST
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3 d12 pl10:f1
  p17 ph2
  p17*2 ph3
  d1 pl1:f1

  p1 ph1
  d0
  4u pl10:f1
  (p17 ph26)
						;begin MLEV17
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 4 times l1 
						;end MLEV17
  (p17 ph26) 
  go=2 ph31
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  MCWRK  wr #0 if #0 zd 

  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
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ph1=0 2 2 0 1 3 3 1
ph2=0
ph3=1
ph22=3 1 3 1 0 2 0 2
ph23=0 2 0 2 1 3 1 3
ph24=1 3 1 3 2 0 2 0
ph25=2 0 2 0 3 1 3 1
ph26=0 2 0 2 1 3 1 3
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;p1 : f1 channel -  90 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p17: f1 channel - trim pulse                        [2.5 msec]
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d12: delay for power switching                      [20 usec]
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 8 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
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;Processing

;PHC0(F1): 180
;PHC1(F1): -180
;FCOR(F1): 1

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;$Id: mlevphpp,v 1.9 2012/01/31 17:49:27 ber Exp $
